---
API: 3
OpenSesame: 4.0.10
Platform: nt
---
set width 1010
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend osweb
set round_decimals 2
set mouse_backend osweb
set keyboard_backend osweb
set jatos_uuid "b0c9e483-1689-7766-ae5e-b25e94169a80"
set height 800
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "G:\\MSc\\project\\repo"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend osweb
set clock_backend osweb
set canvas_backend osweb
set background black

define loop countdown_loop
	set source_file "test.csv"
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 countdown_value 3
	setcycle 1 countdown_value 2
	setcycle 2 countdown_value 1
	run timer

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run stimuli_loading True
	run instructions True
	run starting_form True
	run first_countdown_loop True
	run set_cycle_number True
	run main_loop True
	run final_form True
	run final_logger True

define sketchpad fifa_screenshot
	set duration 750
	set description "Displays stimuli"
	draw image center=1 file="[stimuli_name]" scale=1 show_if=True x=0 y=0 z_index=0

define inline_html final_form
	__html__
	<h3 style = "margin-bottom: 3rem">GREAT JOB! Here are some final questions:</h3>
	<div style="text-align:left">
	
	    <style type="text/css">
	        .block {
	            display: block;
	            text-align: left;
	            margin-top: 5px;
	        }
	    </style>
	        
	    <label for="favourite_color">Your favourite colours include:</label>
	    <form id="favourite_color">
	        <label class="block"><input type="radio" name="favourite_color" value="red">Red</label>
	        <label class="block"><input type="radio" name="favourite_color" value="blue">Blue</label>
	        <label class="block"><input type="radio" name="favourite_color" value="both">Both</label>
	        <label class="block"><input type="radio" name="favourite_color" value="other">Other:<input type="text" id="custom-color" name="custom_color" placeholder="Please specify"></label>
	    </form>
	    <br>
	
	    <label for="favourite_team">The typical outfit of any of your favourite football teams include:</label>
	    <form>
	        <label class="block"><input type="radio" name="favourite_team" value="red">Red</label>
	        <label class="block"><input type="radio" name="favourite_team" value="blue">Blue</label>
	        <label class="block"><input type="radio" name="favourite_team" value="both">Both</label>
	        <label class="block"><input type="radio" name="favourite_team" value="other">Other: <input type="text" id="custom-team" name="custom_team" placeholder="Please specify"></label>
	    </form>
	    <br>
	
	    <label for="technical_issue">Have you experienced any technical issue?</label>
	    <form>
	        <label class="block"><input type="radio" name="technical_issue" value="no">No issues</label>
	        <label class="block"><input type="radio" name="technical_issue" value="image_loading">Some images have not been displayed or were slow to load</label>
	        <label class="block"><input type="radio" name="technical_issue" value="interface">I had problems with the layout of the user interface</label>
	        <label class="block"><input type="radio" name="technical_issue" value="other">Other: <input type="text" id="custom_issue" name="custom_issue" placeholder="Please specify"></label>
	    </form>
	
	    <br>
	    <br>
	
	    <label for="still_good" style="display: block; margin-bottom: 10px; text-align: left;">Have you managed to answer to at least 70% of the trials without any impediment?</label>
	    <form>
	        <label class="block"><input type="radio" name="still_good" value="yes">Yes</label>
	        <label class="block"><input type="radio" name="still_good" value="no">No</label>
	    </form>
	    <br>
	
	    <div id="final_comment" style="display:block;margin-bottom: 10px;">
	        <label for="final_comment">Any final comment?</label>
	        <input type="text" id="final_comment" name="final_comment" placeholder="None">
	    </div>
	
	    <input type="submit" value="Submit" style="background-color: #007bff; color: #fff; padding: 10px; border: none; cursor: pointer; margin: 0 auto; margin-bottom:100rem; display: block;">
	</div>  
	__end__
	set description "Embeds custom HTML"

define logger final_logger
	set description "Logs experimental data"
	set auto_log no
	log favourite_color
	log custom_color
	log favourite_team
	log custom_team

define loop first_countdown_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 countdown_value 10
	setcycle 1 countdown_value 9
	setcycle 2 countdown_value 8
	setcycle 3 countdown_value 7
	setcycle 4 countdown_value 6
	setcycle 5 countdown_value 5
	setcycle 6 countdown_value 4
	setcycle 7 countdown_value 3
	setcycle 8 countdown_value 2
	setcycle 9 countdown_value 1
	run first_timer

define sketchpad first_timer
	set duration 250
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=35 html=yes show_if=True text="[countdown_value]" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=35 html=yes show_if=True text="First image in:" x=0 y=-160 z_index=0

define sketchpad fixation_dot
	set duration 1000
	set description "Fixation dot"
	draw fixdot color="#00aa00" show_if=True style=default x=0 y=0 z_index=0

define inline_javascript image_loading_first_try
	set description "Executes Python code"
	set _run ""
	___prepare__
	 console.log(runner._pool)
	
	
	
	
	
	screenshot_name = stimuli_file_name //TODO dynamically change it
	
	url = "https://michelexyz.github.io/salient_colors/stimuli/"+screenshot_name
	
	console.log("Screenshot: "+screenshot_name+ "\nURL: "+url)
	
	addExternalImageToPool(
	    url,
	    screenshot_name
	)
	
	
	
	// Define the URL of the image you want to load
	
	//console.log(exp.items._items["fifa_screenshot"])
	//exp.items._items["fifa_screenshot"].canvas.image(screshot_name)
	//exp.items._items["fifa_screenshot"].canvas.show()
	// Get the sketchpad item by name (replace "sketchpad_name" with the actual name of your sketchpad)
	//var sketchpad = exp.items["fifa_screenshot"];
	
	// Set the image of the sketchpad to the URL
	//sketchpad.set("image", imageUrl);
	
	// Refresh the sketchpad to display the new image
	//sketchpad.run();
	__end__

define inline_javascript images_list
	set description "Executes Python code"
	___run__
	
	    "id8_v1_b6_r5.jpg",
	    "id2_v2_b5_r6.jpg",
	    "id22_v2_b7_r6.jpg",
	    "id26_v1_b7_r6.jpg",
	    "id11_v1_b5_r6.jpg",
	    "id19_v1_b6_r7.jpg",
	    "id6_v1_b7_r5.jpg",
	    "id1_v1_b7_r5.jpg",
	    "id27_v1_b7_r6.jpg",
	    "id20_v1_b7_r6.jpg",
	    "id5_v2_b7_r6.jpg",
	    "id22_v1_b6_r7.jpg",
	    "id26_v2_b6_r7.jpg",
	    "id9_v2_b5_r7.jpg",
	    "id5_v1_b6_r7.jpg",
	    "id18_v2_b5_r7.jpg",
	    "id27_v2_b6_r7.jpg",
	    "id20_v2_b6_r7.jpg",
	    "id11_v2_b6_r5.jpg",
	    "id8_v2_b5_r6.jpg",
	    "id2_v1_b6_r5.jpg",
	    "id19_v2_b7_r6.jpg",
	    "id3_v2_b6_r7.jpg",
	    "id7_v1_b6_r7.jpg",
	    "id15_v2_b8_r6.jpg",
	    "id17_v1_b6_r5.jpg",
	    "id13_v2_b6_r5.jpg",
	    "id21_v1_b6_r7.jpg",
	    "id18_v1_b7_r5.jpg",
	    "id25_v2_b6_r7.jpg",
	    "id15_v1_b6_r8.jpg",
	    "id10_v1_b6_r7.jpg",
	    "id14_v2_b6_r7.jpg",
	    "id4_v2_b6_r5.jpg",
	    "id24_v2_b6_r7.jpg",
	    "id9_v1_b7_r5.jpg",
	    "id23_v2_b6_r5.jpg",
	    "id16_v1_b6_r7.jpg",
	    "id12_v2_b6_r7.jpg",
	    "id23_v1_b5_r6.jpg",
	    "id6_v2_b5_r7.jpg",
	    "id1_v2_b5_r7.jpg",
	    "id10_v2_b7_r6.jpg",
	    "id14_v1_b7_r6.jpg",
	    "id21_v2_b7_r6.jpg",
	    "id25_v1_b7_r6.jpg",
	    "id3_v1_b7_r6.jpg",
	    "id7_v2_b7_r6.jpg",
	    "id16_v2_b7_r6.jpg",
	    "id12_v1_b7_r6.jpg",
	    "id4_v1_b5_r6.jpg",
	    "id17_v2_b5_r6.jpg",
	    "id13_v1_b5_r6.jpg",
	    "id24_v1_b7_r6.jpg"
	__end__
	set _prepare ""

define inline_html instructions
	__html__
	<div style="text-align: center;">
	<h1>Instructions</h1>
	<p style="font-size: 1.2em; text-align: left; margin: 5rem 10rem 5rem 10rem;">
	    You will be shown, one at a time, pictures of two teams playing against each other on a football pitch. 
	    <br><br>
	    For each of these you will have to try to guess which of the two teams, 'red' or 'blue', has the greater number of players. 
	    <br><br>
	    There are 60 pictures.
	    <br><br>
	    When you see a green dot click the mouse whenever you are ready to see the next image. Be aware, each image is shown for a very short time.
	</p>
	</div>
	    
	<input type="submit" value="Ok" style="font-size: 1.5em; padding: 10px 20px;">
	__end__
	set description "Embeds custom HTML"

define logger logger
	set description "Logs experimental data"
	set auto_log yes
	exclude countdown_value

define loop main_loop
	set source_file "ordered_file_names.csv"
	set source file
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 test 1
	setcycle 1 test 2
	setcycle 2 test 3
	run screenshot_and_response

define inline_javascript old_load_image
	set description "Executes Python code"
	___run__
	// Function to load two images at a time
	function loadImages() {
	    console.log("Inside LoadImages")
	    // Create a new Date object to get the current time
	    const imageLoadStart = new Date();
	    
	   
	
	    // Print the time in the desired format
	    console.log(`Current time: ${imageLoadStart.getHours()}:${imageLoadStart.getMinutes()}:${imageLoadStart.getSeconds()}`);
	        
	    const maxConcurrentLoads = 2; // Maximum concurrent loads
	
	    for (let i = 0; i < maxConcurrentLoads; i++) {
	        if (currentIndex < csvData.length) {
	            const screenshot_name = csvData[currentIndex];
	            const url = "https://michelexyz.github.io/salient_colors/stimuli/" + screenshot_name;
	
	            // Log information about the image
	            console.log("Screenshot: " + screenshot_name + "\nURL: " + url);
	
	            // Load the image using the addExternalImageToPool function
	            addExternalImageToPool(url, screenshot_name);
	
	            currentIndex++;
	        } else {
	            // All images have been loaded
	            const imageLoadEnd = new Date();
	    
	   
	
	            // Print the time in the desired format
	            console.log(`Current time: ${imageLoadEnd.getHours()}:${imageLoadEnd.getMinutes()}:${imageLoadEnd.getSeconds()}`);
	            console.log("All images have been loaded.");
	            return;
	        }
	    }
	
	    // Continue loading if there are more images to load
	    setTimeout(loadImages, 0);
	}
	__end__
	set _prepare ""

define sequence screenshot_and_response
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_dot True
	run fifa_screenshot True
	run user_response True
	run logger True
	run update_cycle_number True

define inline_html screenshot_and_response_first_try
	__html__
	
	
	<!-- Image of the match -->
	<img id="screenshot" alt="FIFA screenshot" style="max-width: 50%;"><br>
	
	<!-- Question -->
	<p>Which team has more players?</p>
	
	<!-- Buttons for the answer -->
	<form id="rispostaForm">
	    <input type="hidden" name="response" id="response_input" value="">
	    <button type="button" onclick="selectAnswer('red')">Red</button>
	    <button type="button" onclick="selectAnswer('blue')">Blue</button>
	    <button type="submit" value = "Submit" id="submit_button" style="display: none;"></button>
	</form>
	
	<script>
	    var imageName = 'salient_colors_' + image_nr + '_v' + version + '.jpg';
	    document.getElementById('screenshot').src = pool[imageName].data.src
	    // Function to handle the answer
	    function selectAnswer(team) {
	        document.getElementById('response_input').value = team;
	        document.getElementById('inviaButton').click();
	        
	    }
	</script>
	__end__
	set description "Embeds custom HTML"

define inline_javascript set_cycle_number
	set description "Executes Python code"
	set _run "cycle_count_var = 0"
	set _prepare ""

define inline_javascript set_stimuli_name
	set description "Executes Python code"
	set _run ""
	___prepare__
	stimuli_name = csvData[image_index];
	
	image_index++;
	__end__

define inline_html starting_form
	__html__
	
	<style>
	    /* Hide the default radio input */
	    input[type="radio"] {
	        display: none;
	    }
	
	    /* Style the label as a button */
	    label.button {
	        display: inline-block;
	        padding: 10px 50px;
	        color: #fff;
	        border: 2px solid #000000;
	        border-radius: 5px;
	        cursor: pointer;
	        /* margin-right: 50px;
	        margin-top: 30px; */
	    }
	    #red_label {
	        background-color: #b52114;
	    }
	    #blue_label {
	        background-color: #1812b5;
	    }
	
	    /* Style the label when the radio input is checked */
	    input[type="radio"]:checked + #red_label {
	        background-color: #ff0000;
	        border-color: #ff0000;
	    }
	    input[type="radio"]:checked + #blue_label {
	        background-color: #0015ff;
	        border-color: #0015ff;
	    }
	
	    /* Ensure buttons are horizontally aligned */
	    label.button {
	        margin-right: 10px;
	    }
	</style>
	
	<!-- <div style="width:100%;align-items: center;justify-content: center;margin-top:10rem"> -->
	    <div style="width:100%; height:375px; align-items: center; justify-content: center"></div>
	    <input type="radio" class="radio-button" id="red" name="color_response" value="red">
	    <label class="button" id="red_label" for="red">Red</label>
	
	    <input type="radio" class="radio-button" id="blue" name="color_response" value="blue">
	    <label class="button" id="blue_label" for="blue">Blue</label>
	
	    <!-- <label for="color_response" style="display: block; margin-bottom: 4rem; ">What's the team with the highest number of players?</label> -->
	    
	</div>
	
	
	
	<!-- <input class="submit-button" id="submitButton" type="submit" value="Next" style="margin-top: 4rem; display: none"> -->
	<input class="submit-button" id="submitButton" type="submit" value="Next" style="display: none">
	<script>
	    startResponseTime = Date.now(); // Start the timer when the page loads
	
	    // Function to calculate and display the time elapsed when the "Submit" button is clicked
	    document.getElementById("submitButton").addEventListener("click", function () {
	        endResponseTime = Date.now();
	        reactionTimeAnswer = (endResponseTime - startResponseTime) ; // Convert to seconds
	
	        // Display the result
	        console.log(`Time passed: ${reactionTimeAnswer} milliseconds`);
	
	        // You can use timePassed for your OpenSesame experiment
	        console.log("EXPERIMENT:")
	        console.log(exp)
	    });
	
	    document.getElementById("blue").addEventListener("click", function () {
	        document.getElementById("submitButton").click()
	    });
	
	    document.getElementById("red").addEventListener("click", function () {
	        document.getElementById("submitButton").click()
	    });
	
	</script>
	__end__
	set description "Embeds custom HTML"

define inline_javascript stimuli_loading
	set description "Executes Python code"
	set _run ""
	___prepare__
	//TODO remove comments and unused functions like addTextPool
	//TODO remove console.logs written for debug
	
	function addExternalImageToPool(url, name) {
	    const img = new Image()
	    img.crossOrigin = "anonymous"
	    img.src = url
	    const item = {
	        data: img,
	        type: "image",
	        name: name
	    }
	    runner._pool.add(item)
	}
	
	function addTextToPool(text) {
	    
	    const item = {
	        data: text,
	        type: "text",
	        name: "ordered_image_names.csv"
	    }
	    
	    runner._pool.add(item)
	}
	
	// Define the URL of the CSV file on GitHub
	const csv_Url = 'https://raw.githubusercontent.com/michelexyz/salient_colors/main/stimuli/ordered_file_names.csv';
	
	
	// Create an empty array to store the CSV data
	const csvData = [];
	
	// Function to download and parse the CSV file
	//async function downloadAndParseCSV() {
	//  try {
	    // Make an HTTP GET request using the Fetch API
	//    const response = await fetch(csv_Url);
	//    text = await response.text();
	    
	//    text = text.replace(/\r/g, '');
	//    addTextToPool(text)
	
	function downloadAndParseCSV() {
	  try {
	      
	    
	    text = exp.pool['ordered_file_names.csv'].data
	    // Split the CSV text into rows
	    const rows = text.split('\n');
	    
	    delete text; //delete the variable to keep it from being logged
	
	    // Loop through the rows and add data to csvData //skip the first one (column name)
	    for (let k = 1; k < rows.length; k++) {
	      const row = rows[k].trim(); // Trim whitespace
	      if (row !== '') {
	        console.log(row);
	        csvData.push(row);
	      }
	    }
	
	    // CSV parsing is complete, and csvData now contains the list
	    console.log('CSV Data:', csvData);
	  } catch (error) {
	    console.error('Error downloading or parsing CSV:', error);
	  }
	}
	
	
	// Call the function to download and parse the CSV
	//downloadAndParseCSV().then(() => {
	    
	downloadAndParseCSV()
	//exp.items._items.main_loop.vars.source_file = "ordered_image_names.csv"
	//exp.items._items.main_loop.prepare() //this line literally duplicates the experiment
	
	
	// Function to load two images at a time
	function loadImages() {
	    console.log("Inside LoadImages")
	    // Create a new Date object to get the current time
	    const imageLoadStart = new Date();
	
	    // Print the time in the desired format
	    console.log(`Load start time: ${imageLoadStart.getHours()}:${imageLoadStart.getMinutes()}:${imageLoadStart.getSeconds()}`);
	        
	
	    for (let i = 0; i < csvData.length; i++) {
	        
	        const screenshot_name = csvData[i];
	        const url = "https://michelexyz.github.io/salient_colors/stimuli/" + screenshot_name;
	
	        // Log information about the image
	        console.log("Screenshot: " + screenshot_name + "\nURL: " + url);
	
	        // Load the image using the addExternalImageToPool function
	        addExternalImageToPool(url, screenshot_name);
	    }
	    
	    console.log("All images have been loaded.");
	    // All images have been loaded
	    const imageLoadEnd = new Date();
	
	    // Print the time in the desired format
	    console.log(`Load end time: ${imageLoadEnd.getHours()}:${imageLoadEnd.getMinutes()}:${imageLoadEnd.getSeconds()}`);
	    
	    return;
	}
	
	
	// Call the function to start loading images
	loadImages();
	
	console.log("EXPERIMENT LOG")
	
	console.log(exp) //logs all the experiment data
	    
	//});
	
	
	//exp.items._items.main_loop.vars.cycles = 5
	__end__

define sketchpad timer
	set duration 250
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=35 html=yes show_if=True text="[countdown_value]" x=0 y=0 z_index=0

define inline_javascript update_cycle_number
	set description "Executes Python code"
	___run__
	cycle_count_var++;
	// you can put [cycle_count_var]  = 3 in the "break if"
	//field to make the cycle repeat only 3 times for test pourposes
	__end__
	set _prepare ""

define inline_html user_response
	__html__
	
	<style>
	    /* Hide the default radio input */
	    input[type="radio"] {
	        display: none;
	    }
	
	    /* Style the label as a button */
	    label.button {
	        display: inline-block;
	        padding: 10px 50px;
	        color: #fff;
	        border: 2px solid #000000;
	        border-radius: 5px;
	        cursor: pointer;
	        /* margin-right: 50px;
	        margin-top: 30px; */
	    }
	    #red_label {
	        background-color: #b52114;
	    }
	    #blue_label {
	        background-color: #1812b5;
	    }
	
	    /* Style the label when the radio input is checked */
	    input[type="radio"]:checked + #red_label {
	        background-color: #ff0000;
	        border-color: #ff0000;
	    }
	    input[type="radio"]:checked + #blue_label {
	        background-color: #0015ff;
	        border-color: #0015ff;
	    }
	
	</style>
	
	<div style="width:100%; height:325px; align-items: center; justify-content: center"></div>
	<input type="radio" class="radio-button" id="red" name="color_response" value="red">
	<label class="button" id="red_label" for="red">Red</label>
	
	<input type="radio" class="radio-button" id="blue" name="color_response" value="blue">
	<label class="button" id="blue_label" for="blue">Blue</label>
	
	
	<input class="submit-button" id="submitButton" type="submit" value="Next" style="display: none">
	<script>
	    startResponseTime = Date.now(); // Start the timer when the page loads
	
	    // Function to calculate and display the time elapsed when the "Submit" button is clicked
	    document.getElementById("submitButton").addEventListener("click", function () {
	        endResponseTime = Date.now();
	        reactionTimeAnswer = (endResponseTime - startResponseTime) ; // Convert to seconds
	
	        // Display the result
	        console.log(`Time passed: ${reactionTimeAnswer} milliseconds`);
	
	        // You can use timePassed for your OpenSesame experiment
	        console.log("EXPERIMENT:")
	        console.log(exp)
	    });
	
	    document.getElementById("blue").addEventListener("click", function () {
	        document.getElementById("submitButton").click()
	    });
	
	    document.getElementById("red").addEventListener("click", function () {
	        document.getElementById("submitButton").click()
	    });
	
	</script>
	__end__
	set description "Embeds custom HTML"

